PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '000', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = time_exp
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    TextComponent textWelcomeMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        歡迎來到本次的實驗

        請按"空白鍵"開始實驗
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent textEndMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        本次實驗到此結束

        感謝您的參與
    KeyboardComponent keyEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine blank_1000
    TextComponent textblank1000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    SoundComponent sound_1
      sound [set every repeat] = sound/trueding.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine pic
    ImageComponent emopic
      image [set every repeat] = $emo_pic
      size [set every repeat] = (0.95, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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    ImageComponent redstar
      image = redstar.png
      pos [set every repeat] = (posx,posy)
      size = (0.2, 0.2)
      startVal [time (s)] = $starduration
      stopVal [duration (s)] = 1.0
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  Routine reproduction_stop
    TextComponent textreproductionend
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        時間再製作業
        請按空白鍵開始計時
        再次按下空白鍵停止計時.
    KeyboardComponent key_stop
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine estimation
    TextComponent textreproductionstart
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        時間估計作業

        請透過滑鼠將刺激呈現時間點在以下量尺中
        按下空白鍵進入下一題
    SliderComponent scale
      forceEndRoutine = False
      granularity = 0
      labels = '0','1','2','3','4','5','6','7','8','9','10','11','12','13','14','15'
      letterHeight = 0.04
      pos = (0, -0.2)
      size = (1.2, 0.04)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15)
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    KeyboardComponent key_next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
    TextComponent textrest
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 25
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      text:
        休息30秒

        時間結束會自動進入下一題
    TextComponent textready
      letterHeight = 0.05
      startVal [time (s)] = 25
      stopVal [duration (s)] = 5
      text = 即將進入下一題
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    SoundComponent sound_2
      sound [set every repeat] = sound/trueding.wav
      startVal [time (s)] = 25
      stopVal [duration (s)] = 1.0
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  Routine pra_img
    ImageComponent image
      image [set every repeat] = $pink
      size = (0.95, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pra_duration
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  Routine start
    TextComponent start_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        練習階段結束

        準備好請按"空白鍵"開始正式階段
    KeyboardComponent start_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine estimation
  Routine Welcome
  LoopInitiator pra_trials loopType="TrialHandler"
    conditionsFile = pink_con.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'pink': 'pink.png', 'pra_duration': 4},
      {'pink': 'pink.png', 'pra_duration': 2},
      {'pink': 'pink.png', 'pra_duration': 6}]
    Routine blank_1000
    Routine pra_img
    Routine estimation
    Routine rest
  LoopTerminator pra_trials
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = pic_condition_2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'emo_pic': 'emo_pic\\pneutral_5500.jpg', 'duration': 1, 'starduration': 0.1384903, 'posx': 0, 'posy': -0.4},
      {'emo_pic': 'emo_pic\\pneutral_7100.jpg', 'duration': 3, 'starduration': 0.1552196, 'posx': 0, 'posy': 0.4},
      {'emo_pic': 'emo_pic\\pneutral_7233.jpg', 'duration': 5, 'starduration': 0.1152479, 'posx': -0.7, 'posy': 0},
      {'emo_pic': 'emo_pic\\pneutral_7950.jpg', 'duration': 7, 'starduration': 0.0561269, 'posx': 0.7, 'posy': 0},
      {'emo_pic': 'emo_pic\\pnegative_low_9331.jpg', 'duration': 1, 'starduration': 0.1384903, 'posx': 0, 'posy': -0.4},
      {'emo_pic': 'emo_pic\\pnegative_low_6010.jpg', 'duration': 3, 'starduration': 0.1552196, 'posx': 0, 'posy': 0.4},
      {'emo_pic': 'emo_pic\\pnegative_low_2520.jpg', 'duration': 5, 'starduration': 0.1152479, 'posx': -0.7, 'posy': 0},
      {'emo_pic': 'emo_pic\\pnegative_low_2100.jpg', 'duration': 7, 'starduration': 0.0561269, 'posx': 0.7, 'posy': 0},
      {'emo_pic': 'emo_pic\\pnegative_high_6230.jpg', 'duration': 1, 'starduration': 0.1384903, 'posx': 0, 'posy': -0.4},
      {'emo_pic': 'emo_pic\\pnegative_high_1300.jpg', 'duration': 3, 'starduration': 0.1552196, 'posx': 0, 'posy': 0.4},
      {'emo_pic': 'emo_pic\\pnegative_high_1201.jpg', 'duration': 5, 'starduration': 0.1152479, 'posx': -0.7, 'posy': 0},
      {'emo_pic': 'emo_pic\\pnegative_high_1120.jpg', 'duration': 7, 'starduration': 0.0561269, 'posx': 0.7, 'posy': 0},
      {'emo_pic': 'emo_pic\\positive_low_7340.jpg', 'duration': 1, 'starduration': 0.1384903, 'posx': 0, 'posy': -0.4}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
    Routine blank_1000
    Routine pic
    Routine estimation
    Routine rest
  LoopTerminator trials
  Routine End
